<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gainsboro</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration>
              <gl:Name>Line</gl:Name>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>linestrip</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>gen.vert</gl:VertexShader>
              <gl:GeometryShader>strip.geom</gl:GeometryShader>
              <gl:FragmentShader>myfrag.frag</gl:FragmentShader>
              <gl:MeshName />
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
          <Left>-1</Left>
          <Right>1</Right>
          <Bottom>-1</Bottom>
          <Top>1</Top>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>linestrip</gl:ShaderName>
          <gl:MeshName>Line</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>DateTime(2012, 01, 01)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it * 10000</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1 - TimeSpan.FromSeconds(it.Item2) </scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>DateTimeOffset(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineTimestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="it" />
                <Property Name="Y" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector2">
                <gl:X>-0.7568025</gl:X>
                <gl:Y>-0.7568025</gl:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector2">
                <gl:X>0.5</gl:X>
                <gl:Y>-0.5</gl:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector2">
                <gl:X>0.5</gl:X>
                <gl:Y>0.5</gl:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector2">
                <gl:X>-0.5</gl:X>
                <gl:Y>0.5</gl:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="5" To="7" Label="Source3" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateVertexBuffer">
          <gl:MeshName>Line</gl:MeshName>
          <gl:DrawMode>Points</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>2</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>